PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = tmptmp
  keyboardBackend = ioHub
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Routines
  Routine blockStartText
    CodeComponent code_blockStart
      Code Type = Auto->JS
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      Begin Routine:
        #determine radioactive source image
        rootdir = os.getcwd()
        sourceImageFile = os.path.join(rootdir,'images',sourceImage)
    ImageComponent radioactive_block_source
      image [set every repeat] = $sourceImageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        New source ahead:









        Press any key if you're ready to start.
    KeyboardComponent key_resp_blockStart
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockEndText
    CodeComponent code_blockEnd
      Code Type = Auto->JS
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      Begin Routine:
        totalReward_text = "£%.2f" %(totalReward);
    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Well done.

        Take a short break.

        In this block, you obtained:
    TextComponent reward_text
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $totalReward_text
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    TextComponent textContinue
      letterHeight = 0.05
      startVal [time (s)] = 5.0
      text = Press any key to continue.
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    KeyboardComponent key_resp_blockEnd
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine expEndText
    CodeComponent code_totRew
      Code Type = Auto->JS
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      Begin Routine:
        totRew_text = "£%.2f" %(totalReward_tot);
    TextComponent textEndExp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Well done. You completed all blocks in this session.

        In this session, you would have earned:





        Thank you
    TextComponent finalReward_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $totRew_text
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  Routine instructed_move
    CodeComponent code_move_i
      Code Type = Auto->JS
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      Begin Routine:
        training_loop_count = training_loop_count + 1

        if training_loop_count == 0:
            shieldRotation = 360;

        target_orientations = [163, 356, 271]

        target_orientation = target_orientations[training_loop_count]
      Each Frame:
        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;

        if shieldRotation%360 == target_orientation%360:
            continueRoutine = False
    PolygonComponent shield_move_i
      fillColor = white
      lineColor = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = shieldCoords
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    PolygonComponent shield_centre_move_i
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori [set every frame] = shieldRotation
      pos [set every frame] = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent shield_bg_short_move_i
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent target_move_i
      fillColor = red
      lineColor = red
      lineWidth = 3
      ori [set every repeat] = target_orientation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    ImageComponent radioactive_move_i
      image = images/radioactive1.png
      pos = (0, -0.5)
      size = (2, 2)
      startVal [time (s)] = 0
      units = cm
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    TextComponent text_move_i
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = You will now do some practice trials. Move the shield so that the radiation hits the shield in its centre.
      wrapWidth = 1.5
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  Routine practiceMove
    CodeComponent code_move
      Code Type = Auto->JS
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      Begin Routine:
        shieldRotation = 0; #begin at top
      Each Frame:
        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
    PolygonComponent shield_move
      fillColor = white
      lineColor = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = shieldCoords
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    PolygonComponent shield_centre_move
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori [set every frame] = shieldRotation
      pos [set every frame] = (0, -0.5)
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent shield_bg_short_move
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      pos = (0, -0.5)
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    ImageComponent radioactive_move
      image = images/radioactive1.png
      pos = (0, -0.5)
      size = (2, 2)
      startVal [time (s)] = 0
      units = cm
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    TextComponent text_move
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = To move the shield around, you can use the "right" and "left" arrow buttons on your keyboard. Try moving the shield now!
      wrapWidth = 1.5
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    TextComponent text_advance_move
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        If you have understood how to move the shield,
        press the space bar to advance to the next screen.
    KeyboardComponent key_resp_move
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent moveTraining_trigger
      address = 0x0378
      disabled = True
      register = EIO
      startData = 101
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = True
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  Routine practiceSize
    CodeComponent code_size
      Code Type = Auto->JS
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      Each Frame:
        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))
    PolygonComponent shield_size
      fillColor = white
      lineColor = $[0, 0, 0]
      ori = shieldRotation
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent shield_centre_size
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori = shieldRotation
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent shield_bg_short_size
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori = shieldRotation
      shape = custom polygon...
      size = (1, 1)
      startVal [time (s)] = 0
      units = cm
      vertices [set every frame] = shieldCoords
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    ImageComponent radio_size
      image = images/radioactive1.png
      size = (2, 2)
      startVal [time (s)] = 0
      units = cm
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    TextComponent text_size
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        To change the shield size, you can use the "up" and "down" arrow buttons on your keyboard. Try changing the shield size now!







        If you have understood how to change the shield size,
        press the space bar to advance to the next screen.
    KeyboardComponent key_resp_size
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent sizeTraining_trigger
      address = 0x0378
      disabled = True
      register = EIO
      startData = 102
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = True
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #initialise variables that will be updated as experiment progresses
        shieldDegrees = 25; #because it needs to be predefined

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #load stimulusStream into NumPy array
        rootdir = os.getcwd()
        stimStreamPath = os.path.join(rootdir,'stimgen',blockFileName)
        storedStream_np = np.loadtxt(stimStreamPath,delimiter=",")

        shieldRotation = 360; #begin at top

        #calculate the total number of frames in the experiment
        nFrames = np.shape(storedStream_np)[0] - 1;
        currentFrame = 0;
        laserRotation = storedStream_np[0,1];

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation));
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation));

        hit_i = 0
        first_hit = 0

        triggerValue = 11
        sendTrigger = True
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True

        square_colour = 'black'

        top_amount_text = '£'+str(top_amount)
        bottom_amount_text = '£'+str(bottom_amount)

        unique, counts = np.unique(storedStream_np, return_counts=True);
        laser_on = min(counts);
        laser_frame_ct = 0;

        laser.setAutoDraw(False);
        laser_long.setAutoDraw(False);
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if bar_length <= 0:
            bar_length = 0.5;
            top_amount = top_amount - 1;
            bottom_amount = bottom_amount - 1;
            top_amount_text = '£'+str(top_amount)
            bottom_amount_text = '£'+str(bottom_amount)

        if wins == 1:
            if bar_length >= 0.5:
                bar_length = 0.001;
                top_amount = top_amount + 1;
                bottom_amount = bottom_amount + 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if square_colour == 'black':
            colour_id = 1
        if square_colour == 'white':
            colour_id = 2

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        ##win.callOnFlip(trialTrigger.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = 7
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = 3
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = 4
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
                triggerValue = 5
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;
                triggerValue = 6
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = storedStream_np[currentFrame,1];
            if currentFrame > 0:
                if storedStream_np[currentFrame, 1] != storedStream_np[currentFrame - 1, 1]:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser.setAutoDraw(True);
                    laser_long.setAutoDraw(True);
                else:
                    laser.setAutoDraw(False);
                    laser_long.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame > 1:
            if storedStream_np[currentFrame,1] != storedStream_np[currentFrame-1,1]:
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = 1
                    else:
                        triggerValue = 2

                    if colour_id == 1:
                        square_colour = 'white'
                    elif colour_id == 2:
                        square_colour = 'black'

                    sendTrigger = True
                    ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            if shieldDegrees == 25:
                laser_long_opacity = 0;
            if shieldDegrees == 45:
                laser_long_opacity = 0.1;
            if shieldDegrees == 65:
                laser_long_opacity = 0.3;

            if wins == 0:
                bar_length = bar_length - (0.0001 - 0.0000555556*45/shieldDegrees);
                totalReward = totalReward - 2*(0.0001 - 0.0000555556*45/shieldDegrees);
                red_bar_length = (0.0001 - 0.0000555556*45/shieldDegrees)*100;
            if wins == 1:
                if shieldDegrees == 25:
                    bar_length = bar_length + 0.00003;
                    totalReward = totalReward + 2*0.00003;
                    red_bar_length = 0.00003*100;
                    reward_change_colour = [-1, 1, -1];
                if shieldDegrees == 45:
                    bar_length = bar_length;
                    totalReward = totalReward;
                    red_bar_length = 0;
                    reward_change_colour = [-1, -1, 1];
                if shieldDegrees == 65:
                    bar_length = bar_length - 0.00003;
                    totalReward = totalReward - 2*0.00003;
                    red_bar_length = 0.00003*100;
                    reward_change_colour = [1, -1, -1];

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            hit_i = 1
            first_hit = 1
        else:
            laser_long_opacity = 1

            #laser_long.setAutoDraw(True)
            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            bar_length = bar_length - 0.0001;
            totalReward = totalReward - 2*0.0001;
            red_bar_length = 0.0001*100;

            if wins == 1:
                reward_change_colour = [1, -1, -1];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([blockID,currentFrame,laserRotation,shieldRotation,shieldDegrees,currentHit,totalReward,sendTrigger,triggerValue])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = 99
            sendTrigger = True
            ##win.callOnFlip(trialTrigger.setData, int(triggerValue))
      End Routine:
        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        ##win.callOnFlip(trialTrigger.setData, int(0))
    CodeComponent code_0_reset
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if wins == 0:
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if wins == 1:
            if bar_length >= 0.5:
                bar_length = 0.001;
                top_amount = top_amount + 1;
                bottom_amount = bottom_amount + 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if totalReward <= 0:
            if wins == 0:
                bar_length = 0.5;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

                totalReward = 1;
            if wins == 1:
                bar_length = 0.00001;
                red_bar_length = 0;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

                totalReward = 0;

        if square_colour == 'black':
            colour_id = 1
        if square_colour == 'white':
            colour_id = 2

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        ##win.callOnFlip(trialTrigger.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = 7
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = 3
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = 4
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
                triggerValue = 5
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;
                triggerValue = 6
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = storedStream_np[currentFrame,1];
            if currentFrame > 0:
                if storedStream_np[currentFrame, 1] != storedStream_np[currentFrame - 1, 1]:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser.setAutoDraw(True);
                    laser_long.setAutoDraw(True);
                else:
                    laser.setAutoDraw(False);
                    laser_long.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame > 1:
            if storedStream_np[currentFrame,1] != storedStream_np[currentFrame-1,1]:
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = 1
                    else:
                        triggerValue = 2

                    if colour_id == 1:
                        square_colour = 'white'
                    elif colour_id == 2:
                        square_colour = 'black'

                    sendTrigger = True
                    ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            if shieldDegrees == 25:
                laser_long_opacity = 0;
            if shieldDegrees == 45:
                laser_long_opacity = 0.1;
            if shieldDegrees == 65:
                laser_long_opacity = 0.3;
            if wins == 0:
                bar_length = bar_length - (0.0001 - 0.0000555556*45/shieldDegrees);
                totalReward = totalReward - 2*(0.0001 - 0.0000555556*45/shieldDegrees);
                red_bar_length = (0.0001 - 0.0000555556*45/shieldDegrees)*100;
            if wins == 1:
                if shieldDegrees == 25:
                    bar_length = bar_length + 0.00003;
                    totalReward = totalReward + 2*0.00003;
                    red_bar_length = 0.00003*100;
                    reward_change_colour = [-1, 1, -1];

                if shieldDegrees == 45:
                    bar_length = bar_length;
                    totalReward = totalReward;
                    red_bar_length = 0;
                    reward_change_colour = [-1, -1, 1];

                if shieldDegrees == 65:
                    if totalReward > 0:
                        bar_length = bar_length - 0.00003;
                        totalReward = totalReward - 2*0.00003;
                        red_bar_length = 0.00003*100;
                    else:
                        bar_length = 0;
                        totalReward = 0;
                        red_bar_length = 0;
                    reward_change_colour = [1, -1, -1];

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            hit_i = 1
            first_hit = 1
        else:
            laser_long_opacity = 1

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];

            if totalReward > 0:
                bar_length = bar_length - 0.0001;
                totalReward = totalReward - 2*0.0001;
                red_bar_length = 0.0001*100;
            else:
                bar_length = 0.00001;
                totalReward = 0;
                red_bar_length = 0;

            if wins == 1:
                reward_change_colour = [1, -1, -1];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([blockID,currentFrame,laserRotation,shieldRotation,shieldDegrees,currentHit,totalReward,sendTrigger,triggerValue])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = 99
            sendTrigger = True
            ##win.callOnFlip(trialTrigger.setData, int(triggerValue))
      End Routine:
        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        ##win.callOnFlip(trialTrigger.setData, int(0))
    CodeComponent code_2__reset
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #initialise variables that will be updated as experiment progresses
        shieldDegrees = 25; #because it needs to be predefined

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #load stimulusStream into NumPy array
        rootdir = os.getcwd()
        stimStreamPath = os.path.join(rootdir,'stimgen',blockFileName)
        storedStream_np = np.loadtxt(stimStreamPath,delimiter=",")

        shieldRotation = 360; #begin at top

        #calculate the total number of frames in the experiment
        nFrames = np.shape(storedStream_np)[0] - 1;
        currentFrame = 0;
        laserRotation = storedStream_np[0,1];

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation));
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation));

        hit_i = 0
        first_hit = 0

        triggerValue = 11
        sendTrigger = True
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True

        square_colour = 'black'

        if wins == 0:

            bar_length = 0.5;
            top_amount = 2;
            bottom_amount = 1;

            totalReward = 2;

            reward_change_colour = [1, -1, -1];
        else:

            top_amount = 4;
            bottom_amount = 3;

            totalReward = 3.5;
            reward_change_colour = [-1, -1, 1];

        top_amount_text = '£'+str(top_amount)
        bottom_amount_text = '£'+str(bottom_amount)

        unique, counts = np.unique(storedStream_np, return_counts=True);
        laser_on = min(counts);
        laser_frame_ct = 0;

        laser.setAutoDraw(False);
        laser_long.setAutoDraw(False);

        progress_bar_length = 0;
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if wins == 0:
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if wins == 1:
            if bar_length >= 0.5:
                bar_length = 0.001;
                top_amount = top_amount + 1;
                bottom_amount = bottom_amount + 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if totalReward <= 0:
            if wins == 0:
                bar_length = 0.5;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

                totalReward = 1;
            if wins == 1:
                bar_length = 0.00001;
                red_bar_length = 0;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

                totalReward = 0;

        if square_colour == 'black':
            colour_id = 1
        if square_colour == 'white':
            colour_id = 2

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        ##win.callOnFlip(trialTrigger.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = 7
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = 3
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = 4
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
                triggerValue = 5
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;
                triggerValue = 6
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = storedStream_np[currentFrame,1];
            if currentFrame > 0:
                if storedStream_np[currentFrame, 1] != storedStream_np[currentFrame - 1, 1]:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser.setAutoDraw(True);
                    laser_long.setAutoDraw(True);
                else:
                    laser.setAutoDraw(False);
                    laser_long.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame > 1:
            if storedStream_np[currentFrame,1] != storedStream_np[currentFrame-1,1]:
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = 1
                    else:
                        triggerValue = 2

                    if colour_id == 1:
                        square_colour = 'white'
                    elif colour_id == 2:
                        square_colour = 'black'

                    sendTrigger = True
                    ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            if shieldDegrees == 25:
                laser_long_opacity = 0;
            if shieldDegrees == 45:
                laser_long_opacity = 0.1;
            if shieldDegrees == 65:
                laser_long_opacity = 0.3;
            if wins == 0:
                bar_length = bar_length - (0.0001 - 0.0000555556*45/shieldDegrees);
                totalReward = totalReward - 2*(0.0001 - 0.0000555556*45/shieldDegrees);
                red_bar_length = (0.0001 - 0.0000555556*45/shieldDegrees)*100;
            if wins == 1:
                if shieldDegrees == 25:
                    bar_length = bar_length + 0.00003;
                    totalReward = totalReward + 2*0.00003;
                    red_bar_length = 0.00003*100;
                    reward_change_colour = [-1, 1, -1];

                if shieldDegrees == 45:
                    bar_length = bar_length;
                    totalReward = totalReward;
                    red_bar_length = 0;
                    reward_change_colour = [-1, -1, 1];

                if shieldDegrees == 65:
                    if totalReward > 0:
                        bar_length = bar_length - 0.00003;
                        totalReward = totalReward - 2*0.00003;
                        red_bar_length = 0.00003*100;
                    else:
                        bar_length = 0;
                        totalReward = 0;
                        red_bar_length = 0;
                    reward_change_colour = [1, -1, -1];

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            hit_i = 1
            first_hit = 1
        else:
            laser_long_opacity = 1

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];

            if totalReward > 0:
                bar_length = bar_length - 0.0001;
                totalReward = totalReward - 2*0.0001;
                red_bar_length = 0.0001*100;
            else:
                bar_length = 0.00001;
                totalReward = 0;
                red_bar_length = 0;

            if wins == 1:
                reward_change_colour = [1, -1, -1];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([blockID,currentFrame,laserRotation,shieldRotation,shieldDegrees,currentHit,totalReward,sendTrigger,triggerValue])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = 99
            sendTrigger = True
            ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        progress_bar_length = progress_bar_length + 0.8/nFrames;
      End Experiment:
        print(totalReward_tot)
      End Routine:
        totalReward_tot = totalReward_tot + totalReward;
        totalReward_text = '£'+str(totalReward)

        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        ##win.callOnFlip(trialTrigger.setData, int(0))
    CodeComponent code_20p
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #initialise variables that will be updated as experiment progresses
        shieldDegrees = 25; #because it needs to be predefined

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #load stimulusStream into NumPy array
        rootdir = os.getcwd()
        stimStreamPath = os.path.join(rootdir,'stimgen',blockFileName)
        storedStream_np = np.loadtxt(stimStreamPath,delimiter=",")

        shieldRotation = 360; #begin at top

        #calculate the total number of frames in the experiment
        nFrames = np.shape(storedStream_np)[0] - 1;
        currentFrame = 0;
        laserRotation = storedStream_np[0,1];
        trueMean = storedStream_np[0,0];
        trueVariance = storedStream_np[0,2];

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation));
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation));

        hit_i = 0
        first_hit = 0

        triggerValue = 11
        sendTrigger = True
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True

        square_colour = 'black'

        if wins == 0:

            bar_length = 0.5;
            top_amount = 2;
            bottom_amount = 1.8;

            totalReward = 2;

            reward_change_colour = [1, -1, -1];
        else:

            top_amount = 4;
            bottom_amount = 3;

            totalReward = 3.5;
            reward_change_colour = [-1, -1, 1];

        top_amount_text = '£'+str(top_amount)
        bottom_amount_text = '£'+str(bottom_amount)

        unique, counts = np.unique(storedStream_np, return_counts=True);
        laser_on = min(counts);
        laser_frame_ct = 0;

        laser.setAutoDraw(False);
        laser_long.setAutoDraw(False);

        progress_bar_length = 0;
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if wins == 0:
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 0.2;
                bottom_amount = bottom_amount - 0.2;
                top_amount_text = '£'+str(round(top_amount, 2));
                bottom_amount_text = '£'+str(round(bottom_amount, 2));

        if wins == 1:
            if bar_length >= 0.5:
                bar_length = 0.001;
                top_amount = top_amount + 1;
                bottom_amount = bottom_amount + 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

        if totalReward <= 0:
            if wins == 0:
                bar_length = 0.5;
                top_amount = 0.6;
                bottom_amount = 0.4;
                top_amount_text = '£'+str(round(top_amount, 2));
                bottom_amount_text = '£'+str(round(bottom_amount, 2));

                totalReward = 0.6;
            if wins == 1:
                bar_length = 0.00001;
                red_bar_length = 0;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = '£'+str(top_amount);
                bottom_amount_text = '£'+str(bottom_amount);

                totalReward = 0;

        if square_colour == 'black':
            colour_id = 1
        if square_colour == 'white':
            colour_id = 2

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False
        ##win.callOnFlip(trialTrigger.setData, int(0))

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = 7
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = 3
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = 4
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                #win.callOnFlip(trialTrigger.setData, int(triggerValue))
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
                triggerValue = 5
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;
                triggerValue = 6
            sendTrigger = True
            #win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = storedStream_np[currentFrame,1];
            trueMean = storedStream_np[currentFrame,0];
            trueVariance = storedStream_np[currentFrame,2];
            if currentFrame > 0:
                if storedStream_np[currentFrame, 1] != storedStream_np[currentFrame - 1, 1]:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser.setAutoDraw(True);
                    laser_long.setAutoDraw(True);
                else:
                    laser.setAutoDraw(False);
                    laser_long.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame > 1:
            if storedStream_np[currentFrame,1] != storedStream_np[currentFrame-1,1]:
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = 1
                    else:
                        triggerValue = 2

                    if colour_id == 1:
                        square_colour = 'white'
                    elif colour_id == 2:
                        square_colour = 'black'

                    sendTrigger = True
                    ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            if shieldDegrees == 25:
                laser_long_opacity = 0;
            if shieldDegrees == 45:
                laser_long_opacity = 0.1;
            if shieldDegrees == 65:
                laser_long_opacity = 0.3;
            if wins == 0:
                bar_length = bar_length - 5*(0.0001 - 0.0000555556*45/shieldDegrees);
                totalReward = totalReward - 2*(0.0001 - 0.0000555556*45/shieldDegrees);
                red_bar_length = 40*5*(0.0001 - 0.0000555556*45/shieldDegrees);
            if wins == 1:
                if shieldDegrees == 25:
                    bar_length = bar_length + 0.00003;
                    totalReward = totalReward + 2*0.00003;
                    red_bar_length = 0.00003*100;
                    reward_change_colour = [-1, 1, -1];

                if shieldDegrees == 45:
                    bar_length = bar_length;
                    totalReward = totalReward;
                    red_bar_length = 0;
                    reward_change_colour = [-1, -1, 1];

                if shieldDegrees == 65:
                    if totalReward > 0:
                        bar_length = bar_length - 0.00003;
                        totalReward = totalReward - 2*0.00003;
                        red_bar_length = 0.00003*100;
                    else:
                        bar_length = 0;
                        totalReward = 0;
                        red_bar_length = 0;
                    reward_change_colour = [1, -1, -1];

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            hit_i = 1
            first_hit = 1
        else:
            laser_long_opacity = 1

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];

            if totalReward > 0:
                bar_length = bar_length - 5*0.0001;
                totalReward = totalReward - 2*0.0001;
                red_bar_length = 5*0.0001*40;
            else:
                bar_length = 0.00001;
                totalReward = 0;
                red_bar_length = 0;

            if wins == 1:
                reward_change_colour = [1, -1, -1];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([blockID,currentFrame,laserRotation,shieldRotation,shieldDegrees,currentHit,totalReward,sendTrigger,triggerValue,trueMean,trueVariance,volatility])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = 99
            sendTrigger = True
            ##win.callOnFlip(trialTrigger.setData, int(triggerValue))

        progress_bar_length = progress_bar_length + 0.8/nFrames;
      End Experiment:
        print(totalReward_tot)
      End Routine:
        totalReward_tot = totalReward_tot + totalReward;
        totalReward_text = '£'+str(totalReward)

        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
        ##win.callOnFlip(trialTrigger.setData, int(0))
    CodeComponent code_changeLoss
      Code Type = Auto->JS
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      Begin Routine:
        #initialise variables that will be updated as experiment progresses
        shieldDegrees = 20; #because it needs to be predefined

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        #load stimulusStream into NumPy array
        rootdir = os.getcwd()
        stimStreamPath = os.path.join(rootdir,'stimgen',blockFileName)
        storedStream_np = np.loadtxt(stimStreamPath,delimiter=",")

        shieldRotation = 360; #begin at top

        #calculate the total number of frames in the experiment
        nFrames = np.shape(storedStream_np)[0] - 1;
        currentFrame = 0;
        laserRotation = storedStream_np[0,1];
        trueMean = storedStream_np[0,0];
        trueVariance = storedStream_np[0,2];

        #update variables to draw polygon
        laserXcoord = CIRCLE_RADIUS*cos(deg2rad(laserRotation));
        laserYcoord = CIRCLE_RADIUS*sin(deg2rad(laserRotation));

        hit_i = 0
        first_hit = 0

        triggerValue = 11
        sendTrigger = True
        #start by sending a trigger when subject presses a button
        sendResponseTriggers = True

        square_colour = 'black';

        if wins == 0:

            bar_length = 0.5;
            top_amount = 1;
            bottom_amount = 0.8;

            totalReward = 1;

            reward_change_colour = [1, -1, -1];
        else:

            top_amount = 4;
            bottom_amount = 3;

            totalReward = 3.5;
            reward_change_colour = [-1, -1, 1];

        top_amount_text = "£%.2f" %(top_amount);
        bottom_amount_text = "£%.2f" %(bottom_amount);

        unique, counts = np.unique(storedStream_np, return_counts=True);
        laser_on = min(counts);
        laser_frame_ct = 0;

        laser.setAutoDraw(False);
        laser_long.setAutoDraw(False);

        progress_bar_length = 0;
      Each Frame:
        #determine whether laser is crossing the shield
        if hit_i:
            hit_i = 0
        else:
            if first_hit:
                laser_long.setAutoDraw(True)

        if wins == 0:
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 0.2;
                bottom_amount = bottom_amount - 0.2;
                top_amount_text = "£%.2f" %(top_amount);
                bottom_amount_text = "£%.2f" %(bottom_amount);

        if wins == 1:
            if bar_length >= 0.5:
                bar_length = 0.001;
                top_amount = top_amount + 1;
                bottom_amount = bottom_amount + 1;
                top_amount_text = "£%.2f" %(top_amount);
                bottom_amount_text = "£%.2f" %(bottom_amount);
            if bar_length <= 0:
                bar_length = 0.5;
                top_amount = top_amount - 1;
                bottom_amount = bottom_amount - 1;
                top_amount_text = "£%.2f" %(top_amount);
                bottom_amount_text = "£%.2f" %(bottom_amount);

        if totalReward <= 0:
            if wins == 0:
                bar_length = 0.25;
                top_amount = 0.2;
                bottom_amount = 0.0;
                top_amount_text = "£%.2f" %(top_amount);
                bottom_amount_text = "£%.2f" %(bottom_amount);

                totalReward = 0.1;
            if wins == 1:
                bar_length = 0.00001;
                red_bar_length = 0;
                top_amount = 1;
                bottom_amount = 0;
                top_amount_text = "£%.2f" %(top_amount);
                bottom_amount_text = "£%.2f" %(bottom_amount);

                totalReward = 0;

        if square_colour == 'black':
            colour_id = 1
        if square_colour == 'white':
            colour_id = 2

        #do not send a trigger on every frame, only if laser position changes or subject presses a button
        sendTrigger = False
        keyReleaseThisFrame = False

        #first, find out if L/R keys have been *released*
        LRkeys_released = kb.getKeys(keyList=keys_move,clear=True,waitRelease=True)
        if len(LRkeys_released)>0: #if so, then flush out the keys one final time
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=True,waitRelease=False)
            triggerValue = 7
            sendTrigger = True
            keyReleaseThisFrame = True
        else: #otherwise, put the currently pressed keys into a list, finishing with the most recently pressed
            LRkeys_pressed = kb.getKeys(keyList=keys_move,clear=False,waitRelease=False)

        UDkeys_pressed = kb.getKeys(keyList=keys_size,clear=True,waitRelease=False)

        #if key is pressed, rotate cursor
        #using most recently pressed key
        if len(LRkeys_pressed)>0:
            if LRkeys_pressed[-1]==key_right:
                shieldRotation += ROTATION_SPEED;
                newTriggerValue = 3
            if LRkeys_pressed[-1]==key_left:
                shieldRotation -= ROTATION_SPEED;
                newTriggerValue = 4
            if sendResponseTriggers:
                triggerValue = newTriggerValue
                sendTrigger = True
                #stop triggering responses until key has been released again
                sendResponseTriggers = False

        if len(UDkeys_pressed)>0:
            if UDkeys_pressed[-1]==key_up:
                shieldDegrees += SHIELD_GROWTH_SPEED;
                triggerValue = 5
            if UDkeys_pressed[-1]==key_down:
                shieldDegrees -= SHIELD_GROWTH_SPEED;
                triggerValue = 6
            sendTrigger = True


        #set lower boundary on shieldWidth
        if shieldDegrees < minShieldDegrees:
            shieldDegrees = minShieldDegrees;

        #set upper boundary on shieldWidth
        if shieldDegrees > maxShieldDegrees:
            shieldDegrees = maxShieldDegrees;

        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        if currentFrame<nFrames:
            laserRotation = storedStream_np[currentFrame,1];
            trueMean = storedStream_np[currentFrame,0];
            trueVariance = storedStream_np[currentFrame,2];
            if currentFrame > 0:
                if storedStream_np[currentFrame, 1] != storedStream_np[currentFrame - 1, 1]:
                    laser_frame_ct = 0;
                else:
                    laser_frame_ct = laser_frame_ct + 1;

                if laser_frame_ct <= laser_on:
                    laser.setAutoDraw(True);
                    laser_long.setAutoDraw(True);
                else:
                    laser.setAutoDraw(False);
                    laser_long.setAutoDraw(False);

        #calculate whether shield is currently hit by laser
        currentHit = (shieldRotation - laserRotation + shieldDegrees)%360 <= (2*shieldDegrees);

        #determine whether laser position has changed
        if currentFrame == 0:
            if not sendTrigger:
                #we'll send different stim change triggers depending on hit/no-hit
                if currentHit:
                    triggerValue = 1
                else:
                    triggerValue = 2

                if colour_id == 1:
                    square_colour = 'white'
                elif colour_id == 2:
                    square_colour = 'black'

                sendTrigger = True

            if currentHit:
                if wins == 0:
                    if shieldDegrees == 20:
                        bar_length = bar_length;
                        totalReward = totalReward;
                        red_bar_length = 0;
                    if shieldDegrees == 40:
                        bar_length = bar_length - 2.5*(lossFactor/3);
                        totalReward = totalReward - lossFactor/3;
                        red_bar_length = 2.5*lossFactor/3;
                    if shieldDegrees == 60:
                        bar_length = bar_length - 2.5*(lossFactor/2);
                        totalReward = totalReward - lossFactor/2;
                        red_bar_length = 2.5*lossFactor/2;
                if wins == 1:
                    if shieldDegrees == 20:
                        bar_length = bar_length + 0.00003;
                        totalReward = totalReward + 2*0.00003;
                        red_bar_length = 0.00003*100;
                        reward_change_colour = [-1, 1, -1];
                    if shieldDegrees == 40:
                        bar_length = bar_length;
                        totalReward = totalReward;
                        red_bar_length = 0;
                        reward_change_colour = [-1, -1, 1];
                    if shieldDegrees == 60:
                        if totalReward > 0:
                            bar_length = bar_length - 0.00003;
                            totalReward = totalReward - 2*0.00003;
                            red_bar_length = 0.00003*100;
                        else:
                            bar_length = 0;
                            totalReward = 0;
                            red_bar_length = 0;
                        reward_change_colour = [1, -1, -1];

            else:
                if totalReward > 0:
                    bar_length = bar_length - 2.5*lossFactor;
                    totalReward = totalReward - lossFactor;
                    red_bar_length = 2.5*lossFactor;
                else:
                    bar_length = 0.00001;
                    totalReward = 0;
                    red_bar_length = 0;
                if wins == 1:
                    reward_change_colour = [1, -1, -1];
        if currentFrame > 1:
            if storedStream_np[currentFrame,1] != storedStream_np[currentFrame-1,1]:
                #we only send a stimulus trigger if we don't already have a response to send
                if not sendTrigger:
                    #we'll send different stim change triggers depending on hit/no-hit
                    if currentHit:
                        triggerValue = 1
                    else:
                        triggerValue = 2

                    if colour_id == 1:
                        square_colour = 'white'
                    elif colour_id == 2:
                        square_colour = 'black'

                    sendTrigger = True

                if currentHit:
                    if wins == 0:
                        if shieldDegrees == 20:
                            bar_length = bar_length;
                            totalReward = totalReward;
                            red_bar_length = 0;
                        if shieldDegrees == 40:
                            bar_length = bar_length - 2.5*(lossFactor/3);
                            totalReward = totalReward - lossFactor/3;
                            red_bar_length = 2.5*lossFactor/3;
                        if shieldDegrees == 60:
                            bar_length = bar_length - 2.5*(lossFactor/2);
                            totalReward = totalReward - lossFactor/2;
                            red_bar_length = 2.5*lossFactor/2;
                    if wins == 1:
                        if shieldDegrees == 20:
                            bar_length = bar_length + 0.00003;
                            totalReward = totalReward + 2*0.00003;
                            red_bar_length = 0.00003*100;
                            reward_change_colour = [-1, 1, -1];
                        if shieldDegrees == 40:
                            bar_length = bar_length;
                            totalReward = totalReward;
                            red_bar_length = 0;
                            reward_change_colour = [-1, -1, 1];
                        if shieldDegrees == 60:
                            if totalReward > 0:
                                bar_length = bar_length - 0.00003;
                                totalReward = totalReward - 2*0.00003;
                                red_bar_length = 0.00003*100;
                            else:
                                bar_length = 0;
                                totalReward = 0;
                                red_bar_length = 0;
                            reward_change_colour = [1, -1, -1];

                else:
                    if totalReward > 0:
                        bar_length = bar_length - 2.5*lossFactor;
                        totalReward = totalReward - lossFactor;
                        red_bar_length = 2.5*lossFactor;
                    else:
                        bar_length = 0.00001;
                        totalReward = 0;
                        red_bar_length = 0;
                    if wins == 1:
                        reward_change_colour = [1, -1, -1];

        #update the shieldRedness according to whether we are currently hitting/missing the shield
        if currentHit:
            if shieldDegrees == 20:
                laser_long_opacity = 0;
            if shieldDegrees == 40:
                laser_long_opacity = 0.1;
            if shieldDegrees == 60:
                laser_long_opacity = 0.3;

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];
            hit_i = 1
            first_hit = 1
        else:
            laser_long_opacity = 1

            shieldColour = [1, 1-(1-laser_long_opacity), 1-(1-laser_long_opacity)];

        if keyReleaseThisFrame:
            sendResponseTriggers = True

        if currentFrame<nFrames:
            saveData.append([blockID,currentFrame,laserRotation,shieldRotation,shieldDegrees,currentHit,totalReward,sendTrigger,triggerValue,trueMean,trueVariance,volatility])
            currentFrame = currentFrame + 1;
        else:
            triggerValue = 99
            sendTrigger = True

        progress_bar_length = progress_bar_length + 0.8/nFrames;
      End Routine:
        totalReward_tot = totalReward_tot + totalReward;
        totalReward_text = "£%.2f" %(totalReward);

        np.savetxt(saveFilename,saveData,delimiter=",",fmt="%s")
    ImageComponent earth_background
      image = images/earth.png
      size = (0.75, 0.75)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    PolygonComponent harmless_area
      fillColor = $[0, 0, 0]
      lineColor = $[0, 0, 0]
      shape = circle
      size = (6.6, 6.6)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
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    PolygonComponent shield
      fillColor [set every frame] = $shieldColour
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      shape = custom polygon...
      size = (1.1, 1.1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent shield_centre
      fillColor = blue
      lineColor = blue
      lineWidth = 3
      ori [set every frame] = shieldRotation
      pos [set every frame] = (0, 0)
      shape = custom polygon...
      size = (1, 1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices = [[0, 0], [0, CIRCLE_RADIUS*1.2]]
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    PolygonComponent shield_bg_short
      fillColor [set every frame] = $[0, 0, 0]
      lineColor [set every frame] = $[0, 0, 0]
      ori [set every frame] = shieldRotation
      shape = custom polygon...
      size = (1, 1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = shieldCoords
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    PolygonComponent laser
      fillColor = red
      lineColor = red
      lineWidth = 10
      ori [set every frame] = laserRotation
      pos [set every repeat] = (0, 0)
      shape = custom polygon...
      size [set every repeat] = (1, 1)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = [[0, 0], [0, CIRCLE_RADIUS*1.1]]
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    PolygonComponent laser_long
      fillColor = red
      lineColor = red
      lineWidth = 10
      opacity [set every frame] = laser_long_opacity
      ori [set every frame] = laserRotation
      pos [set every repeat] = (0, 0)
      shape = custom polygon...
      size [set every repeat] = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = nFrames
      units = cm
      vertices [set every frame] = [[0, 0], [0, CIRCLE_RADIUS*1.4]]
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    ImageComponent radioactive
      color = $[1, 1, 1]
      image [set every repeat] = $sourceImageFile
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      units = cm
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    PolygonComponent reward_bar_red
      anchor = bottom-center
      fillColor [set every frame] = $reward_change_colour
      lineColor [set every frame] = $reward_change_colour
      pos [set every frame] = (0.6, -0.3+bar_length)
      shape = rectangle
      size [set every frame] = (0.05, red_bar_length)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    PolygonComponent reward_bar
      anchor = bottom-center
      fillColor = blue
      lineColor = blue
      pos = (0.6, -0.3)
      shape = rectangle
      size [set every frame] = (0.05, bar_length)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    PolygonComponent progress_bar_edge
      anchor = center-left
      fillColor = $[0, 0, 0]
      lineColor = green
      lineWidth = 2
      pos = (-0.4, -0.45)
      shape = rectangle
      size [set every frame] = (0.8, 0.05)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    PolygonComponent progress_bar
      anchor = center-left
      fillColor = green
      lineColor = green
      pos = (-0.4, -0.45)
      shape = rectangle
      size [set every frame] = (progress_bar_length, 0.05)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
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    TextComponent reward_text_top
      letterHeight = 0.05
      pos = (0.6, 0.25)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      text [set every frame] = $top_amount_text
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    TextComponent reward_text_bottom
      letterHeight = 0.05
      pos = (0.6, -0.35)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      text [set every frame] = $bottom_amount_text
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    TextComponent start_text
      letterHeight = 0.04
      pos = (-0.47, -0.45)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      text = Start
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    TextComponent end_text
      letterHeight = 0.04
      pos = (0.47, -0.45)
      startVal [frame N] = 0
      stopVal [duration (frames)] = nFrames
      text = End
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  Routine sizeExamples
    TextComponent text_size_examples
      letterHeight = 0.04
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        If you are unsure about where radiation will be emitted next, you can increase your shield size to capture radiation within a larger range.

        However, this comes at a cost: your shield becomes less efficient. If you catch radiation with a larger shield, some amount of radiation will still pass through and reach Earth.

        Below, you can see the shielding efficiency of
        a small, medium, and large shield:
    TextComponent text_size_advance
      letterHeight = 0.04
      pos = (0, -0.36)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
      wrapWidth = 1.5
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    ImageComponent shield_small
      disabled = True
      image = images/shield_small_vsb.png
      pos = (-0.4, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent shield_medium
      disabled = True
      image = images/shield_medium_vsb.png
      pos = (0, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent shield_large
      disabled = True
      image = images/shield_large_vsb.png
      pos = (0.4, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent shield_all_sizes
      image = images/shield_sml.png
      pos = (0, -0.15)
      size = (1.2, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_size_examples
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sizeExamples_1
    TextComponent text_size_examples_2
      letterHeight = 0.04
      pos = (0, 0.23)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        It is not only about catching the laser with the shield: the closer you place the centre of the shield to the laser, the less damage the latter does. The shield will let less and less radiations through, the closer the laser is to its centre, making the laser less and less visible. However, a larger shield lets more radiations through than a small one.

        You can see differences in laser visibility in the examples below.
    TextComponent text_size_advance_2
      letterHeight = 0.04
      pos = (0, -0.34)
      startVal [time (s)] = 0.0
      text = When you are ready to advance, press any button.
      wrapWidth = 1.5
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    ImageComponent shield_small_2
      image = images/shield_small_vsb.png
      pos = (-0.4, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent shield_medium_2
      image = images/shield_medium_vsb.png
      pos = (0, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent shield_large_2
      image = images/shield_large_vsb.png
      pos = (0.4, -0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_size_examples_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_1
    CodeComponent code_begin
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        #import necessary packages
        import numpy as np;
        import os;

        #keyboard constants
        kb = keyboard.Keyboard()
        keys_move = ['right', 'left'];
        keys_size = ['up', 'down'];
        key_right = 'right';
        key_left = 'left';
        key_up = 'up';
        key_down = 'down';

        #set constants for the experiment
        ROTATION_SPEED = 1;
        CIRCLE_RADIUS = 3;

        SHIELD_GROWTH_SPEED = 20; #in degrees

        minShieldDegrees = 25;
        maxShieldDegrees = 65;

        #initialise variables that will be updated as experiment progresses

        #instructed training variables
        training_loop_count = -1
        target_orientation = 0

        #shield variables
        shieldDegrees = 45; #because it needs to be predefined
        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        shieldRotation = 360; #begin at top

        #initialise list containing data to be saved
        saveData = [["blockID","currentFrame","laserRotation","shieldRotation","shieldDegrees","currentHit","totalReward","sendTrigger","triggerValue"]]
        saveFilename = "savedData_" + str(expInfo['participant']) + str(expInfo['session']) + ".csv" #load stimulusStream into NumPy array

        #reward variables
        red_bar_length = 0;

        wins = 0;

        if wins == 0:
            bar_length = 0.5;

            top_amount = 7;
            bottom_amount = 6;

            totalReward = 7;

            reward_change_colour = [1, -1, -1];
        else:
            bar_length = 0.25;

            top_amount = 4;
            bottom_amount = 3;

            totalReward = 3.5;
            reward_change_colour = [-1, -1, 1];

        win.mouseVisible = False
    CodeComponent code_begin_2
      Code Type = Auto->JS
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      Begin Experiment:
        #import necessary packages
        import numpy as np;
        import os;

        #keyboard constants
        session = 1;
        image = 2;
        order = 2;

        kb = keyboard.Keyboard()

        if session == 1:
            keys_move = ['s', 'a'];
            keys_size = ['l', 'k'];
            key_right = 's';
            key_left = 'a';
            key_up = 'l';
            key_down = 'k';
        if session == 2:
            keys_move = ['l', 'k'];
            keys_size = ['s', 'a'];
            key_right = 'l';
            key_left = 'k';
            key_up = 's';
            key_down = 'a';

        #set constants for the experiment
        ROTATION_SPEED = 1;
        CIRCLE_RADIUS = 3;

        SHIELD_GROWTH_SPEED = 20; #in degrees

        minShieldDegrees = 20;
        maxShieldDegrees = 60;

        #initialise variables that will be updated as experiment progresses

        #instructed training variables
        training_loop_count = -1
        target_orientation = 0

        #shield variables
        shieldDegrees = 40; #because it needs to be predefined
        shieldWidth = np.sin(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;
        shieldHeight = np.cos(np.radians(shieldDegrees))*CIRCLE_RADIUS*1.5;

        #calculate the screen X and Y locations that correspond to the shield centre
        shieldX=np.sin(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldY=np.cos(np.arange(np.radians(-shieldDegrees),np.radians(shieldDegrees),np.radians(shieldDegrees)/20))*CIRCLE_RADIUS*1.1;
        shieldX = np.concatenate(([0],shieldX));
        shieldY = np.concatenate(([0],shieldY));
        shieldCoords = np.transpose(np.vstack((shieldX,shieldY)))

        shieldRotation = 360; #begin at top

        #initialise list containing data to be saved
        saveData = [["blockID","currentFrame","laserRotation","shieldRotation","shieldDegrees","currentHit","totalReward","sendTrigger","triggerValue","trueMean","trueVariance","volatility"]]
        saveFilename = "savedData_" + str(expInfo['participant']) + str(expInfo['session']) + ".csv" #load stimulusStream into NumPy array

        #reward variables
        red_bar_length = 0;

        wins = 0;

        if wins == 0:
            bar_length = 0.5;

            totalReward_tot = 0;

            reward_change_colour = [1, -1, -1];
        else:
            bar_length = 0.25;

            totalReward_tot = 0;
            reward_change_colour = [-1, -1, 1];

        win.mouseVisible = False

        totalReward_text = '';

        progress_bar_length = 0;

        lossFactor = 0.003;
    TextboxComponent title
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.35)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Save-the-world task
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    TextComponent text_instructions_1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to a new session of the save-the-world task!
        ​
        Remember, you can save the world (and make money!) by navigating your shield to where you expect radiation to be emitted.

        Press any key to start the session.
    KeyboardComponent key_resp_i1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextComponent text_instructions_2
      letterHeight = 0.04
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Here you see one substance in the centre of the screen, its red radiation beam, and a white absorbing shield. In this example, the shield is not in the right position and thus the beam is not stopped and damages Earth.
        ​









        Your task is to manoeuvre the shield to catch as many emissions as possible. Press any key to continue.
    ImageComponent shield_miss_earth
      image = images/shield_miss_earth.png
      size = (0.4, 0.373)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_i2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine radio_colours
    ImageComponent radioactive_colour1
      image = images/radioactive3.png
      pos = (-0.2, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent radioactive_colour2
      image = images/radioactive2.png
      pos = (0.2, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_colours
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will encounter two different radioactive sources:
        A red and a blue source.







        The only difference between these sources is
        how often they change their emission angle over time.

        This session of the game has 4 blocks. Every block lasts about 3min.
        You will play 4 sessions in total.

        Press any key to continue.
    KeyboardComponent key_resp_colours
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reward
    ImageComponent reward_bar_image
      image = images/reward_bar.png
      pos = (0.7, -0.05)
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_reward
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In every session, your reward for saving the world from this radiation starts off at 10£. The more radiation hits Earth, the more reward you lose.











        Press any key to continue.
    TextComponent text_reward_2
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        On the right of the screen, you will see a bar that reflects your current total reward.

        It will decrease as the radiation hits Earth. You can prevent the decrease by catching the radiation with your shield.

        If the bar hits the bottom, you've lost 1£. The numbers on the top and bottom will reset to your new current total reward and the next lower value.
    KeyboardComponent key_resp_reward
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transparence
    ImageComponent shield_as_transparence
      image = images/shield_sml.png
      pos = (0, 0.03)
      size = (1.2, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_transparence
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The efficiency of the shield will also show up in your reward:
        Because larger shields let some radiation through, you will still lose
        a small amount of your reward even if you catch the radiation.








        Your task is to save the world from this harmful substance,
        and keep as much of your reward by doing this!

        Ready?
        Press any button to start playing the game.
    KeyboardComponent key_resp_transparence
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_1
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = stimgen/blocks_training2 - 2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blockID', 1), ('sourceImage', 'radioactive3.png'), ('volatility', 0), ('blockFileName', 'MainVaJmpSession1_block1.csv')]),
      OrderedDict([('blockID', 2), ('sourceImage', 'radioactive2.png'), ('volatility', 1), ('blockFileName', 'MainVaJmpSession1_block3.csv')]),
      OrderedDict([('blockID', 3), ('sourceImage', 'radioactive3.png'), ('volatility', 0), ('blockFileName', 'MainVaJmpSession1_block2.csv')]),
      OrderedDict([('blockID', 4), ('sourceImage', 'radioactive2.png'), ('volatility', 1), ('blockFileName', 'MainVaJmpSession1_block4.csv')])]
    Routine blockStartText
    Routine trial
    Routine blockEndText
  LoopTerminator blocks
  Routine expEndText
